PsychoPy2experiment version="2022.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1920, 1080]
  expName = slideshow_example_new
  keyboardBackend = ioHub
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Routines
  Routine trial
    ImageComponent image
      image [set every repeat] = $images
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        from titta import Titta

        et_name = 'Tobii Pro Spectrum'
        settings = Titta.get_defaults(et_name)
        settings.FILENAME = expInfo['participant'] + '.tsv'

        # Connect to eye tracker
        tracker = Titta.Connect(settings)
        #tracker.set_dummy_mode()
        tracker.init()

        # Calibrate
        tracker.calibrate(win)
        tracker.start_recording(gaze_data=True, store_data=True)
      Begin Routine:
        tracker.send_message('_'.join(['onset', images]))
      End Experiment:
        tracker.stop_recording(gaze_data=True)
        tracker.save_data()
      End Routine:
        tracker.send_message('_'.join(['offset', images]))
Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = images.xlsx
    loopType = random
    nReps = 2
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    Routine trial
  LoopTerminator trials
