PsychoPy2experiment version="3.2.3"
Settings
  Experiment info = {u'session': u'001', u'participant': u''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  expName = slideshow_example
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Routines
  Routine trial
    ImageComponent stim_image
      image [set every repeat] = $images
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = norm
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        from titta import Titta

        et_name = 'Tobii Pro Spectrum'
        settings = Titta.get_defaults(et_name)
        settings.FILENAME = expInfo['participant'] + '.tsv'

        # Connect to eye tracker
        tracker = Titta.Connect(settings)
        #tracker.set_dummy_mode()
        tracker.init()

        # Calibrate
        tracker.calibrate(win)
        tracker.start_recording(gaze_data=True, store_data=True)
      Begin Routine:
        tracker.send_message('_'.join([images, 'onset']))
      End Experiment:
        tracker.stop_recording(gaze_data=True)
        tracker.save_data()
      End Routine:
        tracker.send_message('_'.join([images, 'offset']))
Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = images.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('images', 'im1.jpeg')]),
      OrderedDict([('images', 'im2.jpeg')]),
      OrderedDict([('images', 'im3.jpeg')])]
    Routine trial
  LoopTerminator trials
