PsychoPy2experiment version="3.0.1"
Settings
  Experiment info = {u'session': u'001', u'participant': u''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = use prefs
  Window size (pixels) = [1680, 1050]
  expName = slideshow_example
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Routines
  Routine trial
    ImageComponent image
      image [set every repeat] = $images
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        import tobii_research as tr
        import os

        # Insert the parent directory (where Titta is) to path
        curdir = os.path.dirname(os.path.abspath(__file__))
        os.chdir(curdir)
        sys.path.insert(0,os.path.dirname(curdir))
        from Titta import Titta

        et_name = 'Spectrum'
        settings = TITTA.get_defaults(et_name)
        settings.FILENAME = expInfo['participant'] + '.tsv'

        # Connect to eye tracker
        tracker = TITTA.Connect(settings)
        #tracker.set_dummy_mode()
        tracker.init()

        # Calibrate
        tracker.calibrate(win)
        tracker.start_recording(gaze_data=True, store_data=True)
      Begin Routine:
        tracker.send_message('_'.join([image.name, 'onset']))
      End Experiment:
        tracker.stop_recording(gaze_data=True)
        tracker.save_data()
      End Routine:
        tracker.send_message('_'.join([image.name, 'offset']))
Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = images.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('images', 'im1.jpeg')]),
      OrderedDict([('images', 'im2.jpeg')]),
      OrderedDict([('images', 'im3.jpeg')])]
    Routine trial
  LoopTerminator trials
